e
var c
var p
var o
var m
var t
set_pgstat_chan 0
set_pgstat_mode 3
set_acquisition_frac_autoadjust 60
set_max_bandwidth 20
cell_off
set_range ba 21m
set_autoranging ba 21m 21m
set_range ab 2100m
set_autoranging ab 105m 2100m
store_var t 0 eb
meas_loop_ocp o 200m 1
  pck_start
    pck_add t
    pck_add o
  pck_end
  add_var t 200m
endloop
set_range ba 2100u
set_autoranging ba 2100n 2100u
set_range ab 2100m
set_autoranging ab 2100m 2100m
store_var m 0 ab
add_var m o
set_e m
cell_on
store_var t 0 eb
meas_loop_cv p c m 500m -500m 10m 50m nscans(3)
  pck_start
    pck_add p
    pck_add c
    pck_add t
  pck_end
  add_var t 200156u
endloop
on_finished:
  cell_off

